PsychoPy2experiment version="2023.2.3"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1700, 900]
  expName = final project experiment
  keyboardBackend = ioHub
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Routines
  Routine Welcome
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
          **Welcome to the experiment !**

        Thank you for taking the time to participate in this study.
        You may exit any time by pressing the ESC key.

        This experiment requires headphones.
        Please make sure you are wearing headphone before continuing.Also,
        please try to reduce background noise as it might negatively affect the results of this experiment.

        Thank you for your cooperation.

        Press SPACE to continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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  Routine Audio
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    SoundComponent sound_1
      sound [set every repeat] = $file
      startVal [time (s)] = 1.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'up' , 'down'
      correctAns = $correct
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine Thankyou
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        Thank you for your enthusiastic participation!
        We couldn't have had such a fantastic time without you :) !

        Please press ESC to end the experiment.
    KeyboardComponent key_resp_2
      allowedKeys = 'esc'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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Flow
  Routine Welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = final pro.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'target': 'city', 'condition': 'noise', 'correct': 'down', 'file': 'muskan/city.mp3'},
      {'target': 'Door Bell', 'condition': 'target', 'correct': 'up', 'file': 'muskan/Door Bell.mp3'},
      {'target': 'crowd', 'condition': 'noise', 'correct': 'down', 'file': 'muskan/crowd.mp3'},
      {'target': 'Door Bell', 'condition': 'target', 'correct': 'up', 'file': 'muskan/Door Bell.mp3'},
      {'target': 'evening birds', 'condition': 'noise', 'correct': 'down', 'file': 'muskan/evening birds.mp3'},
      {'target': 'forest ', 'condition': 'noise', 'correct': 'down', 'file': 'muskan/forest .mp3'},
      {'target': 'Door Bell', 'condition': 'target', 'correct': 'up', 'file': 'muskan/Door Bell.mp3'},
      {'target': 'rain', 'condition': 'noise', 'correct': 'down', 'file': 'muskan/rain.mp3'},
      {'target': 'Door Bell', 'condition': 'target', 'correct': 'up', 'file': 'muskan/Door Bell.mp3'},
      {'target': 'ambulance', 'condition': 'noise', 'correct': 'down', 'file': 'muskan/ambulance.mp3'},
      {'target': 'nature', 'condition': 'noise', 'correct': 'down', 'file': 'muskan/nature.mp3'},
      {'target': 'city', 'condition': 'noise', 'correct': 'down', 'file': 'muskan/city.mp3'},
      {'target': 'crowd', 'condition': 'noise', 'correct': 'down', 'file': 'muskan/crowd.mp3'},
      {'target': 'evening birds', 'condition': 'noise', 'correct': 'down', 'file': 'muskan/evening birds.mp3'},
      {'target': 'rain', 'condition': 'noise', 'correct': 'down', 'file': 'muskan/rain.mp3'},
      {'target': 'ambulance', 'condition': 'noise', 'correct': 'down', 'file': 'muskan/ambulance.mp3'}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
    Routine Audio
  LoopTerminator trials
  Routine Thankyou
